PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'version': u'A', u'participant': u''}
  Units = use prefs
  Save psydat file = False
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Save wide csv file = False
  Data filename = u"/data/" + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = devaluation
  logging level = data
  Screen = 1
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Routines
  Routine instr
    CodeComponent init
      Begin Experiment:
        tilt=0
        pressL = 0.0
        pressR = 0.0
    TextComponent test_trigger
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
        You have found one of the original
        vending machines. As before you
        won't be shown any snacks on
        screen. Use your memory to tilt it
        for the snack you want.

        Try to steal as much as you can, as
        this will determine what you will eat
        afterwards!

                   Press space to begin
    KeyboardComponent trigger_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine finish
    TextComponent finish_text
      color = LightGray
      text = Thankyou!
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine feedback
    TextComponent text
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text [set every repeat]:
              Thankyou!

                                                                       Final stage complete
  Routine hunger
    RatingScaleComponent Hunger_rating
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    TextComponent Hunger_text
      color = LightGray
      text = How hungry are you right now?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine ITI
    CodeComponent duration_code
      Begin Routine:
        dur = randint(5,10)
        tilt = 0
    TextComponent fixation
      color = LightGray
      text = +
      stopVal [duration (s)] = $dur
      durationEstim = 5
      startVal [time (s)] = 0.0
      letterHeight = .5
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  Routine Teddies
    RatingScaleComponent teddy_rating
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
      singleClick = True
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    ImageComponent teddy_ratingImage
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = teddy.png
      size = [0.4, 0.5]
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    TextComponent teddy_ratingText
      color = LightGray
      text = How much do you like tiny teddies?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = .075
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  Routine MMs
    RatingScaleComponent MM_rating
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    ImageComponent MM_ratingImage
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = M&M.png
      size = [0.4, 0.5]
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    TextComponent MM_ratingText
      color = LightGray
      text = How much do you like M&Ms?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine test
    CodeComponent checkKeys
      Begin Routine:
        tilt = 0
        pressL = 0.0
        pressR = 0.0
        logging.log(level=logging.DATA, msg = 'start')
      End Routine:
        logging.log(level=logging.DATA, msg = 'end')
      Each Frame:
        if tilt > 0:
         tilt  = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']):
         pressL = pressL+1
         tilt = -15

        if event.getKeys(['v']):
         pressR=pressR+1
         tilt = 15
    PatchComponent CStest
      stopVal [duration (s)] = 6
      durationEstim = 6
      mask = none
      sf = none
      phase = 0
      ori [set every frame] = $tilt
      startVal [time (s)] = 0.0
      image = vend.png
      size = [1.5, 2]
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  Routine BBQ
    RatingScaleComponent BBQ_rating
      pos = 0, -0.5
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      customize_everything = acceptPreText='key, enter'
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    ImageComponent BBQ_ratingImage
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      image = BBQ.png
      size = [0.4, 0.5]
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    TextComponent BBQ_ratingText
      color = LightGray
      text = How much do you like BBQ shapes?
      pos = [0, 0.5]
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine test
    Routine ITI
  LoopTerminator trials
  Routine Teddies
  Routine MMs
  Routine BBQ
  Routine hunger
  Routine finish
