PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u"/data/" + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = $[-1.0,-1.0,-1.0]
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Experiment info = {u'version': u'A', u'participant': u''}
  Save wide csv file = False
  Save psydat file = False
  expName = Pavlovian
  Units = use prefs
  Screen = 1
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Routines
  Routine feedback
    CodeComponent feedback_code
      Begin Experiment:
        msg="msg not updated!"
      Begin Routine:
        if len(key_resp_2.keys)<1:
          msg="Failed to respond"
        elif key_resp_2.corr:
          msg="correct!"
          logging.log(level=logging.DATA, msg = 'correct')
        else:
          msg="Oops! That was wrong"
          logging.log(level=logging.DATA, msg = 'Oops!')
    TextComponent feedback_text
      color = LightGray
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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  Routine ITI
    CodeComponent set_ITI
      Begin Routine:
        delta = randint(-5,5)
        ITIdur = 3
    PatchComponent vend
      stopVal [duration (s)] = 3
      sf = None
      startVal [time (s)] = 0.0
      image = vend.png
      size = [1.5, 2]
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  Routine Instr
    TextComponent Ready
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
        We have discovered that people
        were stealing from the vending
        machines! We have upgraded the
        machine to make them harder to
        steal from. However, when the
        machine is overstocked a free snack
        will fall out.

        The lights on the front panel
        indicate whether the machine is
        overstocked. Watch the lights and
        learn which snacks fall out. A
        multiple choice question will test
        what you have learnt. Use the
        keyboard [a b c d] to indicate the
        correct answer.




                 press space to begin
    KeyboardComponent Begin_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent init
      Begin Experiment:
        yellowSize = 0
        blueSize = 0
  Routine Choice
    PatchComponent vend_testy
      sf = None
      startEstim = 0
      startVal [frame N] = 0
      image [set every repeat] = $testCS
      size = [1.5, 2]
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    TextComponent choice_text
      color = LightGray
      pos = [0, -0.4]
      startEstim = 1
      startVal [frame N] = 60
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
        Which snack is overstocked?

        a) M&Ms
        b) BBQ
        c) tiny teddy
        d) empty
    KeyboardComponent key_resp_2
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      startEstim = 1
      allowedKeys = 'a','b','c','d'
      startVal [frame N] = 60
      store = first key
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  Routine trial
    PatchComponent vend_CS
      color [set every repeat] = $[1,1,1]
      stopVal [frame N] = 180
      durationEstim = 3
      mask = none
      sf = none
      startEstim = 0
      phase = 0
      startVal [frame N] = 0
      image [set every repeat] = $CS
      size = [1.5, 2]
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    PatchComponent Outcome
      stopVal [duration (frames)] = 120
      durationEstim = 2
      mask = none
      pos = [0, -0.4]
      sf = None
      startEstim = 1
      startVal [frame N] = 60
      image [set every repeat] = $US
      size = [0.4, 0.5]
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  Routine test
    PatchComponent vend_test
      stopVal [duration (frames)] = 180
      durationEstim = 3
      mask = none
      sf = none
      startEstim = 0
      phase = 0
      startVal [time (s)] = 0
      image [set every repeat] = $testCS
      size = [2, 2]
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  Routine Thankyou
    TextComponent Thankyou_text
      color = LightGray
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
             Thankyou!

        Stage 2 completed
Flow
  Routine Instr
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = Pavlovian_blocks.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{u'testCS': u'red.png', u'correctAns': u'a'},
      {u'testCS': u'green.png', u'correctAns': u'b'},
      {u'testCS': u'blue.png', u'correctAns': u'c'},
      {u'testCS': u'yellow.png', u'correctAns': u'd'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Pavlovian_trials.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'CS': u'red.png', u'US': u'M&M.png'},
        {u'CS': u'green.png', u'US': u'BBQ.png'},
        {u'CS': u'blue.png', u'US': u'teddy.png'},
        {u'CS': u'yellow.png', u'US': u'empty.png'}]
      Routine ITI
      Routine trial
    LoopTerminator trials
    Routine ITI
    Routine Choice
    Routine feedback
  LoopTerminator blocks
  Routine Thankyou
