PsychoPy2experiment version="1.84.2"
Settings
  Data filename = u"/data/" + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Experiment info = {u'version': u'A', u'participant': u''}
  Save wide csv file = False
  Save psydat file = False
  expName = transfer
  Units = use prefs
  Screen = 1
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Routines
  Routine test
    PatchComponent CStest
      stopVal [duration (s)] = $Duration
      durationEstim = 3
      mask = none
      sf = none
      phase = 0
      ori [set every frame] = $tilt
      startVal [time (s)] = 0.0
      image [set every repeat] = $CS
      size = [1.5, 2]
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    CodeComponent checkKeys
      Begin Routine:
        pressL = 0.0
        pressR = 0.0
        logging.log(level=logging.DATA, msg = 'start')
      End Routine:
        logging.log(level=logging.DATA, msg = 'end')
        logging.flush()
      Each Frame:
        if tilt > 0:
         tilt  = tilt-1
        if tilt < 0:
         tilt = tilt+1

        if event.getKeys(['t']):
         pressL = pressL+1
         tilt = -15

        if event.getKeys(['v']):
         pressR=pressR+1
         tilt = 15
  Routine feedback
    TextComponent text
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
              Thankyou!

        Stage 3 completed
  Routine instr
    CodeComponent init
      Begin Experiment:
        tilt=0
        pressL = 0.0
        pressR = 0.0
    TextComponent test_trigger
      color = LightGray
      startVal [time (s)] = 0.0
      font = Helvetica Bold
      letterHeight = 0.075
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      text:
        Now you have found one of the
        new secure machines. At random
        intervals we will overstock it with a
        different snack. You will be given an
        opportunity to steal from the
        machine when it is overstocked.

        However, to test your memory no
        snacks will appear on the screen.
        Remember what you have learned
        and steal as many snacks as you
        can.


                Press space to begin
    KeyboardComponent trigger_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = transfertrials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'Onset': 0, u'CS': u'fix.png', u'Duration': 9},
      {u'Onset': 9, u'CS': u'red.png', u'Duration': 6},
      {u'Onset': 15, u'CS': u'vend.png', u'Duration': 16},
      {u'Onset': 31, u'CS': u'blue.png', u'Duration': 6},
      {u'Onset': 37, u'CS': u'vend.png', u'Duration': 7},
      {u'Onset': 44, u'CS': u'green.png', u'Duration': 6},
      {u'Onset': 50, u'CS': u'vend.png', u'Duration': 8},
      {u'Onset': 58, u'CS': u'yellow.png', u'Duration': 6},
      {u'Onset': 64, u'CS': u'vend.png', u'Duration': 11},
      {u'Onset': 75, u'CS': u'red.png', u'Duration': 6},
      {u'Onset': 81, u'CS': u'vend.png', u'Duration': 15},
      {u'Onset': 96, u'CS': u'green.png', u'Duration': 6},
      {u'Onset': 102, u'CS': u'vend.png', u'Duration': 3},
      {u'Onset': 105, u'CS': u'blue.png', u'Duration': 6},
      {u'Onset': 111, u'CS': u'vend.png', u'Duration': 9},
      {u'Onset': 120, u'CS': u'yellow.png', u'Duration': 6},
      {u'Onset': 126, u'CS': u'vend.png', u'Duration': 10},
      {u'Onset': 136, u'CS': u'red.png', u'Duration': 6},
      {u'Onset': 142, u'CS': u'vend.png', u'Duration': 15},
      {u'Onset': 157, u'CS': u'green.png', u'Duration': 6},
      {u'Onset': 163, u'CS': u'vend.png', u'Duration': 10},
      {u'Onset': 173, u'CS': u'blue.png', u'Duration': 6},
      {u'Onset': 179, u'CS': u'vend.png', u'Duration': 15},
      {u'Onset': 194, u'CS': u'yellow.png', u'Duration': 6},
      {u'Onset': 200, u'CS': u'vend.png', u'Duration': 15},
      {u'Onset': 215, u'CS': u'red.png', u'Duration': 6},
      {u'Onset': 221, u'CS': u'vend.png', u'Duration': 10},
      {u'Onset': 231, u'CS': u'green.png', u'Duration': 6},
      {u'Onset': 237, u'CS': u'vend.png', u'Duration': 10}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
    Routine test
  LoopTerminator trials
  Routine feedback
